<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="labjacku6" tag="labjack" pulse_duration="pulse_duration" pulse_on="pulse_on" lever1="lever1" lever2="lever2" lever1_solenoid="lever1_solenoid" lever2_solenoid="lever2_solenoid" laser_trigger="laser_trigger" strobed_digital_word="strobed_digital_word" counter="counter"></iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="pulse_duration" scope="global" logging="when_changed" default_value="0" type="integer">
            <action type="if" tag="If non zero" condition="pulse_duration != 0">
                <action type="assignment" tag="Set pulse_on" variable="pulse_on" value="1"></action>
            </action>
            <action type="if" tag="If zero" condition="pulse_duration == 0">
                <action type="assignment" tag="Clear pulse_on" variable="pulse_on" value="0"></action>
            </action>
        </variable>
        <variable tag="pulse_on" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="pulse_on_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_SOURCE" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever2" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever2_SOURCE" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_solenoid" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_solenoid_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever2_solenoid" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever2_solenoid_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="laser_trigger" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="laser_trigger_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="strobed_digital_word" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="counter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
        <variable tag="tempCount" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="nScans1" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
        <variable tag="nScans2" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli"></stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptable="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="assignment" tag="Reset counter" variable="counter" value="0"></action>
                    <action tag="Start labjack" type="start_device_IO" device="labjack"></action>
                    <action type="report" message="**** In Beginning Task State"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="counter > nScans1" target="Middle Task State"></transition>
                </task_system_state>
                <task_system_state tag="Middle Task State" interruptable="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="report" message="**** In Middle Task State"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <action type="assignment" tag="Set tempCount" variable="tempCount" value="counter"></action>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="(counter - tempCount) > nScans2" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptable="YES">
                    <action type="report" message="**** In Exit Task State"></action>
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action tag="Stop labjack" type="stop_device_IO" device="labjack"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>