<?xml version="1.0"?>
<monkeyml version="1.0">
  <io_devices tag="IO Devices">
    <iodevice tag="LabJackU6" priority="" type="LabJackU6" 
              pulse_duration="juice" pulse_on="juice" 
              lever1="FIO1"
              lever1_solenoid="MIO0"
              quadrature="quadrature"
              laser_trigger="laserTrigger"
              optic_device="optic_device"
              strobed_digital_word="strobedDigitalWord"
              counter="counter"/>
    <iodevice tag="FakeMonkey" priority="" type="fake_monkey" id="" alt="" spike_rate="10"/>
    <iodevice type="serverside_conduit" tag="Server-side Event Conduit" resource_name="server_conduit"/>
  </io_devices>
  <variables tag="Variables">
    <folder tag="Behavioral Control">
      <variable tag="subjectNum" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="ExptStruct"/>
      <variable tag="experimentXmlTrialId" scope="global" logging="when_changed" default_value="512" type="integer" persistant="1"/> <!-- n.b. it is forcibly set each trial below -->
      <variable tag="optic_device" scope="global" logging="when_changed" default_value="led" type="string"/>

    </folder>
    <folder tag="Stimuli">
      <variable tag="stopAfterNTrials" scope="local" logging="when_changed" default_value="90" type="integer" persistant="1" groups="ExptStruct"/>      

      <variable tag="tactileStimulusDurationUs" scope="global" logging="when_changed" default_value="100000" type="integer" persistant="1" groups="StimulusSpecs"/>
      <variable tag="soundDurationMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1" groups="StimulusSpecs"/>
      <variable tag="sendstimDurationMs" scope="global" logging="when_changed" default_value="500" type="integer" persistant="1" groups="StimulusSpecs"/>
      <variable tag="preSoundPauseDurationMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="0" groups="StimulusSpecs"/>
      <variable tag="postSoundPauseDurationMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="0" groups="StimulusSpecs"/>
      <variable tag="speedTimerIntervalMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="0" groups="SpeedCounters"/>
      <variable tag="itiTimerIntervalMs" scope="global" logging="when_changed" default_value="500" type="float" persistant="0" groups="ITICounters"/>

      <variable tag="speedTimerNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="NFrames"/>
      <variable tag="itiTimerNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="NFrames"/>
      <variable tag="preSoundPauseNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="NFrames"/>
      <variable tag="postSoundPauseNFrames" scope="global" logging="when_changed" default_value="0" type="float" persistant="1" groups="NFrames"/>

      <variable tag="frameImagingFrequencyHz" scope="global" logging="when_changed" default_value="500" type="float" persistant="1" groups="ImagingVars"/>
      <variable tag="frameImagingExposureMs" scope="global" logging="when_changed" default_value="450" type="integer" persistant="1" groups="ImagingVars"/>	 
      <variable tag="frameImagingBinning" scope="global" logging="when_changed" default_value="4" type="integer" persistant="1" groups="ImagingVars"/>

      <variable tag="nFramesOn" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1" groups="NFrames"/>
      <variable tag="nFramesOff" scope="global" logging="when_changed" default_value="200" type="integer" persistant="1" groups="NFrames"/>

    </folder>
    <folder tag="Task Status">
      <variable tag="stimulusOn" scope="global" logging="when_changed" default_value="0" type="boolean"/>
      <variable tag="trialStart" scope="global" logging="when_changed" default_value="0" type="boolean"/>
    </folder>
    <folder tag="Online Display">
      <variable tag="sync" scope="global" logging="when_changed" default_value="0" type="integer"/>
    </folder>
    <folder tag="Hardware variables">
      <variable tag="FIO1" full_name="FIO1" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed" groups="Hardware"/>
      <variable tag="MIO0" full_name="MIO0" default_value="0" scope="GLOBAL" type="boolean" editable="never" logging="when_changed" groups="Hardware"/>
      <variable tag="laserTrigger" full_name="laserTrigger" default_value="0" scope="GLOBAL" type="boolean" logging="when_changed" persistant="0"/>
      <variable tag="strobedDigitalWord" full_name="strobedDigitalWord" default_value="0" scope="GLOBAL" type="integer" logging="when_changed" persistant="0"/>
      <variable tag="juice" full_name="juice" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" groups="Hardware"/>
      <variable tag="counter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="Hardware"></variable>
      <variable tag="quadrature" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1" groups="Hardware"></variable>
      <variable tag="sendLaserParams" full_name="sendLaserParams" scope="GLOBAL" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="sendSerialParams" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
    </folder>
    <folder tag="Internal Variables">
      <variable tag="tTempStim" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      <variable tag="tTactileStimulusDurationUs" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>

      <variable tag="tITIWheelCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="tISIWheelCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="tStimWheelCounter" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0" groups="SpeedCounters"/>
      <variable tag="tStimTurnedOn" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
      
      <variable tag="tTrialsDoneSinceStart" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="tTrialStartMWTimestampMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="tThisTrialStartTimeMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="tLastTrialStartTimeMs" scope="global" logging="when_changed" default_value="90" type="integer" persistant="1"/>
      <variable tag="frameCountN" scope="global" logging="when_changed" default_value="0" type="integer" persistant="0"/>
    </folder>
  </variables>
  <sounds tag="Sounds">
    <sound tag="sound100ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-100ms.wav"/>
    <sound tag="sound200ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-200ms.wav"/>
    <sound tag="sound300ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-300ms.wav"/>
    <sound tag="sound400ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-400ms.wav"/>
    <sound tag="sound500ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-500ms.wav"/>
    <sound tag="sound600ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-600ms.wav"/>
    <sound tag="sound700ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-700ms.wav"/>
    <sound tag="sound800ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-800ms.wav"/>
    <sound tag="sound900ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-900ms.wav"/>
    <sound tag="sound1000ms" type="wav_file" path="/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/sound-1k-1000ms.wav"/>
  </sounds>
  <stimuli tag="Stimuli">
    <stimulus type="blank_screen" tag="background" color="0.5,0.5,0.5"></stimulus>       
  </stimuli>    
  <experiment tag="Experiment" full_name="">
    <protocol tag="JuiceOnHoldProtocol" full_name="" selection="sequential" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
      <action type="queue_stimulus" stimulus="background"></action>
      
    <action tag="Start IO Device" type="start_device_IO" device="LabJackU6"></action>
      <!-- init actions before running trials after any press of start-->
            
      <action type="assignment" variable="tTrialsDoneSinceStart" value="0"></action>
      <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
      <action type="assignment" tag="set counter to 0" variable="counter" value="0"></action>
      <action type="assignment" tag="set quadrature to 0" variable="quadrature" value="0"></action>
      
      <action type="assignment" tag="Calculate nFramesOn" variable="nFramesOn" value="ceil((sendstimDurationMs/1000)*frameImagingFrequencyHz)"/>
      <action type="assignment" tag="Calculate nFramesOff" variable="itiTimerNFrames" value="ceil((itiTimerIntervalMs/1000)*frameImagingFrequencyHz)"/>
      <action type="assignment" tag="Calculate nFramesPreSound" variable="preSoundPauseNFrames" value="ceil((preSoundPauseDurationMs/1000)*frameImagingFrequencyHz)"/>
      <action type="assignment" tag="Calculate nFramesPostSound" variable="postSoundPauseNFrames" value="ceil((postSoundPauseDurationMs/1000)*frameImagingFrequencyHz)"/>

      <trial tag="Trial" full_name="Trial" description="" interruptible="YES" selection="sequential" nsamples="1" sampling_method="cycles">
     
      <!--<range_replicator tag="New Replicator" from="0" to="89" step="1" variable="rrStimulusNumber"> -->
    <task_system tag="TS" full_name="TS" interruptable="YES" description="" interruptible="YES" _error="Task Systems must contain >=1 transition that yields to parent">
      <task_system_state tag="Inter Stimulus Interval" interruptible="YES">
          <action_marker _unmoveable="1" tag="Actions"></action_marker>
       
          <!-- if we have done enough trials, abort this trial - before any encodes/sync are done -->
          <action type="if" condition="stopAfterNTrials > 0 &amp;&amp; tTrialsDoneSinceStart > stopAfterNTrials">
              <action type="report" message="** Stopping after completing $stopAfterNTrials trials"></action>
              <action type="stop_experiment"></action>  
          </action>
          

          <action type="assignment" variable="tTrialStartMWTimestampMs" value="now()/1000"></action>  <!-- integer valued ms timestamp -->
          <action type="assignment" variable="tCounter" value="counter"></action>

          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>
          <action type="assignment" tag="Encode START" variable="strobedDigitalWord" value="170"></action>

          <!--Transmit the trial timestamp so strobed code sequences are unique -->
          <action type="assert" condition="tTrialStartMWTimestampMs &lt;= 2147483648" 
                  message="tTrialStartMWTimestampMs is too large - should happen only after several days of running!?"
                  stop_on_failure="1"/>  
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          <action type="assignment" tag="Encode TimestampStart" variable="strobedDigitalWord" value="200"/>
         
          <action type="assignment" tag="Encode TimestampEnd" variable="strobedDigitalWord" value="201"/>

          <action type="assignment" tag="Sync Matlab" variable="sync" value="1"></action>
          <action type="assignment" tag="Set trialStart" variable="trialStart" value="1"></action>
          <action type="assignment" tag="juice = 0" variable="juice" value="0"></action>
          <action type="assignment" tag="tStimTimeUs Set" variable="tTactileStimulusDurationUs" value="tactileStimulusDurationUs"/>
          <action type="assignment" tag="-" variable="laserTrigger" value="0"></action>
          <action type="assignment" tag="Set spCounter intervals based on frames required" variable="speedTimerIntervalMs" value="((1/frameImagingFrequencyHz)*speedTimerNFrames)*1000"/>
          <action type="assignment" tag="Set itiCounter intervals based on frames required" variable="itiTimerIntervalMs" value="((1/frameImagingFrequencyHz)*itiTimerNFrames)*1000"/>
          <action type="assignment" tag="Set preSound interval based on frames required" variable="preSoundPauseDurationMs" value="((1/frameImagingFrequencyHz)*preSoundPauseNFrames)*1000"/>
          <action type="assignment" tag="Set postSound interval based on frames required" variable="postSoundPauseDurationMs" value="((1/frameImagingFrequencyHz)*postSoundPauseNFrames)*1000"/>

          <action type="assert" condition="soundDurationMs == 100 || soundDurationMs == 200 || soundDurationMs == 300 || soundDurationMs == 400 || soundDurationMs == 500 || soundDurationMs == 600 || soundDurationMs == 700 || soundDurationMs == 800 || soundDurationMs == 900 || soundDurationMs == 1000" message="*******SoundDurationMs must be a multiple of 100 between 100ms and 1000ms!!!*******" stop_on_failure="1"/>  

      	
          <!-- initialize trial start/end times -->
          <action type="if" condition="tThisTrialStartTimeMs == -1">  
              <!--first trial, leave lasttime as -1 -->
              <action type="assignment" variable="tLastTrialStartTimeMs" value="-1"></action>
          </action>
          <action type="if" condition="tThisTrialStartTimeMs != -1">  <!--else-->
              <!--later trials, copy this into last before setting this again below -->
              <action type="assignment" variable="tLastTrialStartTimeMs" value="tThisTrialStartTimeMs"></action>
          </action>
          <action type="assignment" variable="tThisTrialStartTimeMs" value="now()/1000"></action>
          
          <action type="assignment" tag="Clear stimulusOn" variable="stimulusOn" value="0"></action>
          <action type="assignment" tag="Encode InterStimIntervalStart" variable="strobedDigitalWord" value="6"></action>

          <action type="report" message="In Inter-Trial Interval, waiting for $nFramesOff frames"></action>
          <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
          <transition type="conditional" tag="If $nFramesOff is scanned, move to EndTrial" condition="counter-tCounter >= nFramesOff" target="PreSoundPause" ></transition>
      </task_system_state>

      <task_system_state tag="PreSoundPause" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>
            <action type="report" message="*** Sitting in PreSoundPause State for $preSoundPauseDurationMs ms"/>

            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If $preSoundPauseNFrames is scanned, move to EndTrial" condition="counter-tCounter >= preSoundPauseNFrames" target="PlaySound" ></transition>
      </task_system_state>

      <task_system_state tag="PlaySound" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>
            <action type="report" message="*** Playing Tone Now"/>

            <!-- Debugging sound below: delete before committing -->
            <action type="if" condition="soundDurationMs == 100">
              <action type="play_sound" sound="sound100ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 200">
              <action type="play_sound" sound="sound200ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 300">
              <action type="play_sound" sound="sound300ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 400">
              <action type="play_sound" sound="sound400ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 500">
              <action type="play_sound" sound="sound500ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 600">
              <action type="play_sound" sound="sound600ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 700">
              <action type="play_sound" sound="sound700ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 800">
              <action type="play_sound" sound="sound800ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 900">
              <action type="play_sound" sound="sound900ms"/>
            </action>
            <action type="if" condition="soundDurationMs == 1000">
              <action type="play_sound" sound="sound1000ms"/>
            </action>
      
            <!-- update display, finalize variables -->
            <action tag="Update Display" type="update_stimulus_display"></action>

            <!-- Can't actually have a system state for timer 1, but it would be here-->
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If $postSoundPauseNFrames is scanned, move to EndTrial" condition="counter-tCounter >= postSoundPauseNFrames" target="SendStim" ></transition> 
      </task_system_state>


      <task_system_state tag="SendStim" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="tCounter" value="counter"></action>
            <action type="report" message="*** Tactile Stimulus Sent -- Staying in Post-Stim State for $nFramesOn scans."></action>
            <action type="assignment" variable="tStimTurnedOn" value="now()/1000"/>

            <action type="assignment" variable="juice" value="tTactileStimulusDurationUs"/>

            <!-- Can't actually jave a system state for timer 1, but it would be here-->
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="conditional" tag="If $nFramesOn, move to EndTrial" condition="(counter - tCounter) >= nFramesOn" target="EndTrial" ></transition>
      </task_system_state>
                    
      <task_system_state tag="EndTrial" interruptible="YES">
            <action_marker _unmoveable="1" tag="Actions"></action_marker>
            <action type="assignment" variable="laserTrigger" value="0"></action> <!-- disable trigger no matter if it went high or not -->
            <action type="assignment" tag="End Matlab Sync" variable="sync" value="0"></action>
            
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" tag="Encode END" variable="strobedDigitalWord" value="85"></action>
            <action type="assignment" variable="tTrialsDoneSinceStart" value="tTrialsDoneSinceStart+1"/>
              
            <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
            <transition type="yield" tag="return to parent task system"></transition>
        </task_system_state> 
        </task_system>
      </trial>
      <action tag="Stop IO Device" type="stop_device_IO" device="LabJackU6"></action>
    </protocol>
  </experiment>
</monkeyml>

