monkeyml version=1.0
io_devices "IO Devices"
  iodevice LabJackU6 "LabJackU6": pulse_duration=juice, pulse_on=juice, lever1=FIO1, lever1_solenoid=FIO2, laser_trigger=laserTriggerFIO, strobed_digital_word=strobedDigitalWord
  iodevice fake_monkey "FakeMonkey": spike_rate=10
  iodevice serverside_conduit "Server-side Event Conduit": resource_name=server_conduit
variables "Variables"
  folder "Behavioral Control"
    variable integer "experimentXmlTrialId": default_value=8, persistant=1
    <!-- n.b. it is forcibly set each trial below -->
    variable integer "subjectNum": default_value=0, persistant=1, groups=Task Type
    variable boolean "doConstantStimulus": default_value=0, persistant=1, groups=Task Type
    variable boolean "stopITIFlashing": default_value=0, persistant=1, groups=Task Type
    variable integer "doVisualStim": default_value=1, persistant=1, groups=Task Type
    variable integer "doLaserStim": default_value=0, persistant=1, groups=Task Type
    variable integer "doOriDetect": default_value=0, persistant=1, groups=Task Type
    variable integer "doContrastDetect": default_value=1, persistant=1, groups=Task Type
    variable integer "doBlock2": default_value=0, persistant=1, groups=Task Type
    variable integer "nTaskStates": default_value=0, persistant=1, groups=Trial Structure
    variable integer "itiTimeMs": default_value=5000, persistant=1, groups=Trial Structure
    variable integer "stimOnTimeMs": default_value=500, persistant=1, groups=Trial Structure
    variable integer "stimOffTimeMs": default_value=500, persistant=1, groups=Trial Structure
    variable integer "minCyclesOn": default_value=1, persistant=1, groups=Trial Structure
    variable integer "maxCyclesOn": default_value=2, persistant=1, groups=Trial Structure
    variable integer "tooFastTimeMs": default_value=100, persistant=1, groups=Trial Structure
    variable integer "reactTimeMs": default_value=1000, persistant=1, groups=Trial Structure
    variable integer "doExtendItiOnShortPrevTrial": default_value=0, persistant=1, groups=Trial Structure
    variable float "soundPressAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundBaseAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundTargetAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundIncorrectAmplitude": default_value=0, persistant=1, groups=Sounds
    variable float "soundRewardAmplitude": default_value=0, persistant=1, groups=Sounds
    variable integer "doLeverSolenoidAllTrials": default_value=0, persistant=1, groups=Solenoid
    variable integer "doLeverSolenoidOnMiss": default_value=0, persistant=1, groups=Solenoid
    variable integer "doLeverSolenoidOnEarly": default_value=0, persistant=1, groups=Solenoid
    variable integer "earlyTimeoutMs": default_value=200, persistant=1, groups=Timeouts
    variable integer "missedTimeoutMs": default_value=2000, persistant=1, groups=Timeouts
    variable integer "nConsecErrorsCauseTimeout": default_value=10, persistant=1, groups=Timeouts
    variable integer "consecErrorTimeoutS": default_value=120, persistant=1, groups=Timeouts
    variable integer "postRewardMs": default_value=500, persistant=1, groups=Reward
    variable integer "rewardUs": default_value=20000, persistant=1, groups=Reward
    variable integer "interRewardIntervalMs": default_value=200, persistant=1, groups=Reward
    variable integer "rewardEveryNCorrect": default_value=0, persistant=1, groups=Reward
    variable integer "maxConsecCorrects": default_value=1, persistant=1, groups=Reward
  folder "Stimuli"
    variable integer "baseGratingDirectionDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "baseGratingContrast": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingElevationDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingAzimuthDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "gratingHeightDeg": default_value=200, persistant=1, groups=Stimulus Parameters
    variable integer "gratingWidthDeg": default_value=200, persistant=1, groups=Stimulus Parameters
    variable float "gratingSpatialFreqCPD": default_value=0.05, persistant=1, groups=Stimulus Parameters
    variable integer "gratingSpeedDPS": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "gratingDurationMs": default_value=800, persistant=1, groups=Stimulus Parameters
    variable float "gratingStartingPhaseDeg": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level1": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level2": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level3": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level4": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level5": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level6": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level7": default_value=10, persistant=1, groups=Stimulus Parameters
    variable integer "trPer80Level8": default_value=10, persistant=1, groups=Stimulus Parameters
    <!-- stimulus control parameters -->
    variable float "gratingMaxContrastStep": default_value=1, persistant=1, groups=Stimulus Parameters
    variable float "gratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Stimulus Parameters
    variable float "gratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Stimulus Parameters
    variable float "gratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Stimulus Parameters
    variable integer "laserPeakMaxMw": default_value=20, persistant=1, groups=Laser
    variable integer "laserPeakStepsPerOctave": default_value=2, persistant=1, groups=Laser
    variable integer "laserOffPowerMw": default_value=0, persistant=1, groups=Laser
    variable integer "laserTransitionRampUpDownMs": default_value=2, persistant=1, groups=Laser
    variable integer "laserTransitionDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable float "laserBaselinePowerMw": default_value=0, persistant=1, groups=Laser
    <!-- 0: do not do baseline -->
    variable float "laserBaselinePostStimTimeMs": default_value=500, persistant=1, groups=Laser
    variable integer "laserDoLinearRamp": default_value=1, persistant=1, groups=Laser
    variable integer "laserRampLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserRampExtraConstantLengthMs": default_value=0, persistant=1, groups=Laser
    variable integer "laserRampDoExpRamp": default_value=0, persistant=1, groups=Laser
    variable integer "laserDoPulseTrain": default_value=0, persistant=1, groups=Laser
    variable integer "laserPulseLengthMs": default_value=5, persistant=1, groups=Laser
    variable integer "laserPulsePeriodMs": default_value=20, persistant=1, groups=Laser
    variable integer "laserTrainLengthMs": default_value=100, persistant=1, groups=Laser
    variable integer "laserTrainRandomNPulses": default_value=0, persistant=1, groups=Laser
    variable integer "laserTrainRandomType": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserPowerMw": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOnTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "trialLaserOffTimeMs": default_value=0, persistant=1, groups=Laser
    variable float "forceMinStimStepTo": default_value=-1, persistant=1, groups=Laser
    <!-- block 2 control -->
    variable integer "doBlock2SeparateOdds": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level1": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level2": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level3": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level4": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level5": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level6": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level7": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2TrPer80Level8": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "doBlock2SeparateReward": default_value=0, persistant=1, groups=Block2 Reward
    variable integer "block2RewardUs": default_value=20000, persistant=1, groups=Block2 Reward
    variable integer "doBlock2SecondLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoRampLength": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2RampLengthMs2": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RampLengthPowerMaxMw2": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoGratingAppearance": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingElevationDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingAzimuthDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingHeightDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingWidthDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingSpatialFreqCPD": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingSpeedDPS": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2GratingDurationMs": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2BaseGratingContrast": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2BaseGratingDirectionDeg": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingMaxContrastStep": default_value=1, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Block2 Stimulus
    variable float "block2GratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Block2 Stimulus
    variable integer "block2DoRampVTrain": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainPowerMaxMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtRampBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2RvtTrainBaselinePowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable integer "block2DoTrialLaser": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserPowerMw": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOnTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserOffTimeMs": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserGratingMaxContrastStep": default_value=1, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserGratingContrastStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserGratingMaxDirectionStepDeg": default_value=10, persistant=1, groups=Block2 Laser
    variable float "block2TrialLaserGratingDirectionStepsPerOctave": default_value=0, persistant=1, groups=Block2 Laser
  folder "Fake Mouse"
    variable boolean "doLever": default_value=0, persistant=1, groups=Fake Mouse
    variable integer "fakeMouseMaxPressMs": default_value=300, persistant=1, groups=Fake Mouse
    variable integer "fakeMouseMaxReactMs": default_value=5000, persistant=1, groups=Fake Mouse
  folder "Task Status"
    variable integer "failure": default_value=0
    variable boolean "leverResult": default_value=0
    variable boolean "stimulusOn": default_value=0
    variable integer "success": default_value=0
    variable integer "ignore": default_value=0
    variable boolean "trialStart": default_value=0
    variable float "pressTimestampMs": default_value=0, persistant=0
    variable float "actualHoldTimeMs": default_value=0, persistant=0
  folder "Online Display"
    variable integer "sync": default_value=0
  folder "Hardware variables"
    variable INTEGER "FIO1": default_value=0, scope=GLOBAL, editable=never
    variable boolean "FIO2": default_value=0, scope=GLOBAL, editable=never
    variable boolean "laserTriggerFIO": default_value=0, scope=GLOBAL, persistant=0
    variable integer "strobedDigitalWord": default_value=0, scope=GLOBAL, persistant=0
    variable integer "juice": scope=GLOBAL, default_value=0
    variable integer "sendLaserParams": scope=GLOBAL, default_value=0, persistant=0
    variable integer "sendSerialParams": default_value=0, persistant=0
  folder "Internal Variables"
    variable integer "tTrialStartMWTimestampMs": default_value=0, persistant=0
    variable integer "tTotalReqHoldTimeMs": default_value=0
    variable integer "tTotalRewardTimeUs": default_value=0
    variable integer "tRandReqHoldTimeMs": default_value=0
    variable integer "tFakeMouseReactMs": default_value=0
    variable integer "tFakeMousePressMs": default_value=0
    variable integer "tStartTrialWaitForPressTimeMs": default_value=0
    variable integer "consecCorrects": default_value=0
    variable integer "tConsecErrors": default_value=0, persistent=0
    variable integer "tConsecTimeoutStartTime": default_value=0, persistent=0
    variable integer "tNRewards": default_value=0
    variable integer "tInterRewardIntervalMs": default_value=0
    variable integer "tRewardAddPerMsHoldUs": default_value=0
    variable integer "tGotLongBonusThisTrial": default_value=0
    variable integer "tStimTurnedOn": default_value=0
    variable integer "tItiWaitTimeMs": default_value=0
    variable integer "tThisTrialStartTimeMs": default_value=0
    variable integer "tLastTrialStartTimeMs": default_value=0
    variable integer "lastActualHoldTimeMs": default_value=0
    variable integer "tempMs": default_value=0
    variable integer "tTempStimOdds": default_value=0, persistant=0
    variable integer "tStimulusNumber": default_value=0, persistant=0
    variable integer "tSvStimNumber": default_value=0, persistant=0
    variable float "tLaserPowerMw": default_value=0, persistant=0
    variable integer "tLaserDoLinearRamp": default_value=0, persistant=0
    variable integer "tLaserDoPulseTrain": default_value=0, persistant=0
    variable integer "tLaserRampLengthMs": default_value=0, persistant=0
    variable integer "tLaserPeakMaxMw": default_value=0, persistant=0
    variable float "tLaserBaselinePowerMw": default_value=0, persistant=0
    variable float "tBaseGratingContrast": default_value=0, persistant=0
    variable float "tBaseGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingMaxContrastStep": default_value=0, persistant=0
    variable float "tGratingContrastStepsPerOctave": default_value=0, persistant=0
    variable float "tGratingMaxDirectionStepDeg": default_value=0, persistant=0
    variable float "tGratingDirectionStepsPerOctave": default_value=0, persistant=0
    variable float "tLaserPeakStepsPerOctave": default_value=0, persistant=0
    variable float "tGratingDirectionDeg": default_value=0, persistant=0
    variable float "tGratingContrast": default_value=0, persistant=0
    variable float "tGratingElevationDeg": default_value=0, persistant=0
    variable float "tGratingAzimuthDeg": default_value=0, persistant=0
    variable float "tGratingHeightDeg": default_value=0, persistant=0
    variable float "tGratingWidthDeg": default_value=0, persistant=0
    variable float "tGratingSpatialFreqCPD": default_value=0, persistant=0
    variable float "tGratingSpeedDPS": default_value=0, persistant=0
    variable integer "tGratingDurationMs": default_value=0, persistant=0
    variable float "tTrialLaserPowerMw": default_value=0, persistant=0
    variable float "tTrialLaserOnTimeMs": default_value=0, persistant=0
    variable float "tTrialLaserOffTimeMs": default_value=0, persistant=0
    variable integer "tBlock2TrialNumber": default_value=0, persistant=0
    variable integer "tLeverPressTimeMs": default_value=0, persistant=0
    variable integer "tLeverReleaseTimeMs": default_value=0, persistant=0
    variable integer "trials": default_value=1, persistant=0
    variable integer "nCyclesOn": default_value=0, persistant=0
    variable integer "tCyclesOn": default_value=0, persistant=0
    variable integer "tTimeoutMs": default_value=0, persistant=0
    variable integer "tITIClock": default_value=0, persistant=0
    variable integer "tITIRemainingOnMs": default_value=0, persistant=0
    variable integer "tITIRemainingOffMs": default_value=0, persistant=0
    variable integer "tTrialRemainingOnMs": default_value=0, persistant=0
    variable integer "tTrialRemainingOffMs": default_value=0, persistant=0
    variable integer "tEnteredOnStateTimeMs": default_value=0, persistant=0
    variable integer "tEnteredOffStateTimeMs": default_value=0, persistant=0
    variable integer "stimTag": default_value=0, persistant=0
    variable integer "timeEndRemainingOffMs": default_value=0, persistant=0
    variable integer "timeEndRemainingOnMs": default_value=0, persistant=0
    variable integer "targetStimOnMs": default_value=0, persistant=0
    variable integer "tStimOnMs": default_value=0, persistant=0
    variable integer "tStimOffMs": default_value=0, persistant=0
    variable integer "extraCycleTimeMs": default_value=0, persistant=0
    variable integer "tempNCorrect": default_value=0, persistent=0, persistant=0
    variable integer "tTrialCycleOff": default_value=0, persistent=0, persistant=0
    variable integer "tTrialCycleOn": default_value=0, persistent=0, persistant=0
    variable integer "tTrialStartOff": default_value=0, persistent=0, persistant=0
    variable integer "tTrialStartOn": default_value=0, persistent=0, persistant=0
    variable integer "startReactState": default_value=0, persistent=0, persistant=0
    variable integer "isTooFast": default_value=1, persistent=0, persistant=0
    variable integer "tNStimAccepted": default_value=0, persistant=0
    variable selection "svStimNumber": values=0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,21,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41,42,43,44,45,46,47,48,49,50,51,52,53,54,55,56,57,58,59,60,61,62,63,64,65,66,67,68,69,70,71,72,73,74,75,76,77,78,79, selection=random_without_replacement, nsamples=80, sampling_method=samples
sounds "Sounds"
  sound wav_file "pressSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/louderFlatterPress.wav, amplitude=soundPressAmplitude
  sound wav_file "baseSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/10000Hz_.2s.wav, amplitude=soundBaseAmplitude
  sound wav_file "targetSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/8000Hz_.2s.wav, amplitude=soundTargetAmplitude
  sound wav_file "incorrectSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/incorrectMouse.wav, amplitude=soundIncorrectAmplitude
  sound wav_file "rewardSound": path=/Users/hullglick/Repositories/BehaviorCode-Glickfeld-Hull/BehaviorCode/NewSkeletonCode/wavs/shortCorrect.wav, amplitude=soundRewardAmplitude
stimuli "Stimuli"
  stimulus blank_screen "background": color=0.5,0.5,0.5
  stimulus drifting_grating "base_grating": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tGratingWidthDeg, y_size=tGratingHeightDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tBaseGratingDirectionDeg, alpha_multiplier=tBaseGratingContrast
  stimulus drifting_Grating "target_grating": direction=0, starting_phase=gratingStartingPhaseDeg, spatial_frequency=tGratingSpatialFreqCPD, speed=tGratingSpeedDPS, grating_type=sinusoid, mask=gaussian, std_dev=0.3, mean=0.1, x_size=tGratingWidthDeg, y_size=tGratingHeightDeg, x_position=tGratingAzimuthDeg, y_position=tGratingElevationDeg, rotation=tGratingDirectionDeg, alpha_multiplier=tGratingContrast
experiment "Experiment"
  protocol "JuiceOnHoldProtocol": selection=sequential, nsamples=1, sampling_method=cycles
    trial "Trial 01": nsamples=10000, sampling_method=cycles, selection=sequential
      task_system "TS": interruptable=YES
        task_system_state "Initialization"
          action start_device_IO "Start IO Device": device=LabJackU6
          action assignment "Sync Matlab": variable=sync, value=1
          action queue_stimulus: stimulus=background
          action update_stimulus_display "-"
          <!-- In this state, do all stimulus selection/tValue setting -->
          action assignment "Set tITIClock to ITITime": variable=tITIClock, value=itiTimeMs
          action report: message=Initializing Trial
          <!-- Reset t_____RemainingOn/Off to 0ms -->
          action assignment "Reset tITIRemainingTimeOn": variable=tITIRemainingOnMs, value=0
          action assignment "Reset tITIRemainingTimeOff": variable=tITIRemainingOffMs, value=0
          action assignment "Reset tTrialRemainingTimeOn": variable=tTrialRemainingOnMs, value=0
          action assignment "Reset tTrialRemainingTimeOff": variable=tTrialRemainingOffMs, value=0
          action assignment "Reset tTrialCycleOff": variable=tTrialCycleOff, value=0
          action assignment "Reset tTrialCycleOn": variable=tTrialCycleOn, value=0
          action assignment "Reset tTrialStartOff": variable=tTrialStartOff, value=0
          action assignment "Reset tTrialStartOn": variable=tTrialStartOn, value=0
          action assignment "Reset tLeverPressTimeMs": variable=tLeverPressTimeMs, value=0
          action assignment "Reset tLeverReleaseTimeMs": variable=tLeverReleaseTimeMs, value=0
          action assignment "Reset targetStimOn": variable=targetStimOnMs, value=0
          action assignment "Reset tStimOn": variable=tStimOnMs, value=0
          action assignment "Reset tCyclesOn": variable=tCyclesOn, value=0
          action assignment "Reset isTooFast": variable=isTooFast, value=1
          action assignment "Reset nTaskStates": variable=nTaskStates, value=0
          action assignment "Set nCyclesOn between min and maxCyclesOn": variable=nCyclesOn, value=(int)rand(minCyclesOn, maxCyclesOn)
          action assignment: variable=tTrialStartMWTimestampMs, value=now()/1000
          <!-- integer valued ms timestamp -->
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          action assignment "Encode START": variable=strobedDigitalWord, value=170
          <!-- Transmit the trial timestamp so strobed code sequences are unique -->
          action assert: condition=tTrialStartMWTimestampMs <= 2147483648, message=tTrialStartMWTimestampMs is too large - should happen only after several days of running!?, stop_on_failure=1
          <!-- prevent overflow outside 2**31ms ~ 10 days - I don't know how to get unsigned casts in the XML -->
          <!-- encode trialStartTimestamp in bytes: 4 bytes: millions of seconds, 1000s, s, ms -->
          action assignment "Encode TimestampStart": variable=strobedDigitalWord, value=200
          action assignment: variable=strobedDigitalWord, value=tTrialStartMWTimestampMs/1000/1000000
          <!-- mega s -->
          action assignment: variable=strobedDigitalWord, value=(tTrialStartMWTimestampMs- (tTrialStartMWTimestampMs/1000000000)*1000000000) /1000000
          <!-- mega to kilo s -->
          action assignment: variable=strobedDigitalWord, value=(tTrialStartMWTimestampMs- (tTrialStartMWTimestampMs/1000000)*1000000) /1000
          <!-- 0-999s -->
          action assignment: variable=strobedDigitalWord, value=(tTrialStartMWTimestampMs - (tTrialStartMWTimestampMs/1000)*1000)
          <!-- ms -->
          action assignment "Encode TimestampEnd": variable=strobedDigitalWord, value=201
          action assignment "Set trialStart": variable=trialStart, value=1
          action assignment "juice = 0": variable=juice, value=0
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment: variable=laserTriggerFIO, value=0
          action assignment: variable=lastActualHoldTimeMs, value=actualHoldTimeMs
          action assignment: variable=experimentXmlTrialId, value=8
          action assignment: variable=tStimTurnedOn, value=0
          <!-- choose correct stimulus number based on odds; block2 tr number does not get assigned if ! doBlock2 -->
          action assignment: variable=tSvStimNumber, value=svStimNumber
          <!-- choose a value from selection var, 0-origin -->
          action assignment: variable=tTempStimOdds, value=0
          <!-- this variable exists only for code clarity below -->
          <!-- level 1 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level1))
            action assignment: variable=tStimulusNumber, value=0
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level1-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level1
          <!-- level 1b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level1))
              action assignment: variable=tStimulusNumber, value=0
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level1
          <!-- level 2 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level2))
            action assignment: variable=tStimulusNumber, value=1
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level2-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level2
          <!-- level 2b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level2))
              action assignment: variable=tStimulusNumber, value=1
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level2
          <!-- level3 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level3))
            action assignment: variable=tStimulusNumber, value=2
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level3-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level3
          <!-- level3b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level3))
              action assignment: variable=tStimulusNumber, value=2
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level3
          <!-- level4 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level4))
            action assignment: variable=tStimulusNumber, value=3
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level4-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level4
          <!-- level4b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level4))
              action assignment: variable=tStimulusNumber, value=3
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level4
          <!-- level5 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level5))
            action assignment: variable=tStimulusNumber, value=4
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level5-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level5
          <!-- level5b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level5))
              action assignment: variable=tStimulusNumber, value=4
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level5
          <!-- level6 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level6))
            action assignment: variable=tStimulusNumber, value=5
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level6-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level6
          <!-- level6b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level6))
              action assignment: variable=tStimulusNumber, value=5
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level6
          <!-- level7 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level7))
            action assignment: variable=tStimulusNumber, value=6
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level7-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level7
          <!-- level7b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level7))
              action assignment: variable=tStimulusNumber, value=6
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level7
          <!-- level8 -->
          action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+trPer80Level8))
            action assignment: variable=tStimulusNumber, value=7
            action if: condition=doBlock2 && !doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=(int)((tSvStimNumber-tTempStimOdds) <= (((int)trPer80Level8-1)/2))
            action if: condition=doBlock2 && doBlock2SeparateOdds
              action assignment: variable=tBlock2TrialNumber, value=0
          action assignment: variable=tTempStimOdds, value=tTempStimOdds + trPer80Level8
          <!-- level8b: b2 sep odds on -->
          action if: condition=doBlock2 && doBlock2SeparateOdds
            action if: condition=tSvStimNumber >= tTempStimOdds && (tSvStimNumber < (tTempStimOdds+block2TrPer80Level8))
              action assignment: variable=tStimulusNumber, value=7
              action assignment: variable=tBlock2TrialNumber, value=1
            action assignment: variable=tTempStimOdds, value=tTempStimOdds + block2TrPer80Level8
          <!-- error checking -->
          action assert: stop_on_failure=1, condition=tTempStimOdds == 80, message=stim odds must sum to 80!  (sum now is $tTempStimOdds )
          <!-- stop_on_failure=0: allow slop so it can be changed while running -->
          action if: condition=doBlock2 && !doBlock2SeparateOdds
            action assert: condition=trPer80Level1-(((int)trPer80Level1)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level2-(((int)trPer80Level2)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level3-(((int)trPer80Level3)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level4-(((int)trPer80Level4)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level5-(((int)trPer80Level5)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level6-(((int)trPer80Level6)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level7-(((int)trPer80Level7)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
            action assert: condition=trPer80Level8-(((int)trPer80Level8)/2)*2 == 0, stop_on_failure=1, message=When doBlock2 and !doBlock2SeparateOdds, all odds must be div. by 2
          <!-- Choose block 2 trial type -->
          action if: condition=doBlock2
            action assert: stop_on_failure=1, condition=(block2DoGratingAppearance+block2DoRampLength+block2DoRampVTrain+block2DoTrialLaser) == 1, message=must select exactly one of block2Do variables!
            <!-- trial numbers assigned above in switch statement.  Note equal probability 
                               - if more complicated odds wanted; add a set of block2 level odds -->
            <!-- grating appearance for block 2 -->
            action if: condition=block2DoGratingAppearance
              action assert: condition=doVisualStim == 1, stop_on_failure=1, message=doVisualStim must be 1 for block2DoGratingAppearance == 1
              <!-- same for both types of block2 trials -->
              action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
                action assignment: variable=tGratingDurationMs, value=gratingDurationMs
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=tBaseGratingDirectionDeg, value=block2BaseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=block2BaseGratingContrast
                action assignment: variable=tGratingMaxContrastStep, value=block2GratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=block2GratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=block2GratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=block2GratingDirectionStepsPerOctave
                action assignment: variable=tGratingElevationDeg, value=block2GratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=block2GratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=block2GratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=block2GratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=block2GratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=block2GratingSpeedDPS
                action assignment: variable=tGratingDurationMs, value=block2GratingDurationMs
            <!-- ramp length for block 2 -->
            action if: condition=block2DoRampLength
              action assert: condition=doLaserStim == 1, stop_on_failure=1, message=doLaserStim must be 1 for block2DoRampLength == 1
              action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
              action if: condition=tBlock2TrialNumber == 0
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
              action if: condition=tBlock2TrialNumber == 1
                action assignment: variable=tLaserRampLengthMs, value=block2RampLengthMs2
                action assignment: variable=tLaserPeakMaxMw, value=block2RampLengthPowerMaxMw2
            <!-- ramp v train for block 2 -->
            action if: condition=block2DoRampVTrain
              action assert: condition=doLaserStim == 1, stop_on_failure=1, message=doLaserStim must be 1 for block2DoRampLength == 1
              action assert: condition=laserDoLinearRamp+laserDoPulseTrain == 0, stop_on_failure=1, message=when block2 controls ramp v. train, set laserDoLinearRamp/PulseTrain both to 0
              action if: condition=tBlock2TrialNumber == 0
                <!-- ramp -->
                action assignment: variable=tLaserDoLinearRamp, value=1
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserDoPulseTrain, value=0
                action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
                action assignment: variable=tLaserPeakStepsPerOctave, value=laserPeakStepsPerOctave
                action assignment: variable=tLaserBaselinePowerMw, value=block2RvtRampBaselinePowerMw
              action if: condition=tBlock2TrialNumber == 1
                <!-- train -->
                action assignment: variable=tLaserDoLinearRamp, value=0
                action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
                action assignment: variable=tLaserDoPulseTrain, value=1
                action assignment: variable=tLaserPeakMaxMw, value=block2RvtTrainPowerMaxMw
                action assignment: variable=tLaserPeakStepsPerOctave, value=block2RvtTrainStepsPerOctave
                action assignment: variable=tLaserBaselinePowerMw, value=block2RvtTrainBaselinePowerMw
              <!-- in both cases: for paired vision -->
              action if: condition=doVisualStim == 1
                action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
                action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
                action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
                action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
                action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
                action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
                action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
                action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
                action assignment: variable=tGratingDurationMs, value=gratingDurationMs
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
            <!-- using trial laser for block 2 -->
            action if: condition=block2DoTrialLaser
              action assert: condition=!doLaserStim, stop_on_failure=1, message=When using trialLaser, doLaserStim must be off
              action assignment: variable=tGratingDurationMs, value=gratingDurationMs
              action if: condition=tBlock2TrialNumber == 0
                <!-- off -->
                action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
                action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
              action if: condition=tBlock2TrialNumber == 1
                <!-- on -->
                action assignment: variable=tTrialLaserPowerMw, value=block2TrialLaserPowerMw
                action assignment: variable=tTrialLaserOnTimeMs, value=block2TrialLaserOnTimeMs
                action assignment: variable=tTrialLaserOffTimeMs, value=block2TrialLaserOffTimeMs
                action assignment: variable=tGratingMaxContrastStep, value=block2GratingMaxContrastStep
                action assignment: variable=tGratingContrastStepsPerOctave, value=block2GratingContrastStepsPerOctave
                action assignment: variable=tGratingMaxDirectionStepDeg, value=block2GratingMaxDirectionStepDeg
                action assignment: variable=tGratingDirectionStepsPerOctave, value=block2GratingDirectionStepsPerOctave
              <!-- in both cases -->
              action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
              action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
              action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
              action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
              action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
              action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
              action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
              action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
              action assignment: variable=tGratingDurationMs, value=gratingDurationMs
          <!-- end doBlock2 -->
          <!-- if no block 2 randomization, just set all affected vars to fixed values -->
          action if: condition=! doBlock2
            action assignment: variable=tBaseGratingDirectionDeg, value=baseGratingDirectionDeg
            action assignment: variable=tBaseGratingContrast, value=baseGratingContrast
            action assignment: variable=tGratingElevationDeg, value=gratingElevationDeg
            action assignment: variable=tGratingAzimuthDeg, value=gratingAzimuthDeg
            action assignment: variable=tGratingHeightDeg, value=gratingHeightDeg
            action assignment: variable=tGratingWidthDeg, value=gratingWidthDeg
            action assignment: variable=tGratingSpatialFreqCPD, value=gratingSpatialFreqCPD
            action assignment: variable=tGratingSpeedDPS, value=gratingSpeedDPS
            action assignment: variable=tGratingDurationMs, value=gratingDurationMs
            action assignment: variable=tLaserRampLengthMs, value=laserRampLengthMs
            action assignment: variable=tLaserPeakMaxMw, value=laserPeakMaxMw
            action assignment: variable=tLaserPeakStepsPerOctave, value=laserPeakStepsPerOctave
            action assignment: variable=tGratingMaxContrastStep, value=gratingMaxContrastStep
            action assignment: variable=tGratingContrastStepsPerOctave, value=gratingContrastStepsPerOctave
            action assignment: variable=tGratingMaxDirectionStepDeg, value=gratingMaxDirectionStepDeg
            action assignment: variable=tGratingDirectionStepsPerOctave, value=gratingDirectionStepsPerOctave
            action assignment: variable=tLaserDoLinearRamp, value=laserDoLinearRamp
            action assignment: variable=tLaserDoPulseTrain, value=laserDoPulseTrain
            action assignment: variable=tLaserBaselinePowerMw, value=laserBaselinePowerMw
            action assignment: variable=tTrialLaserPowerMw, value=trialLaserPowerMw
            action assignment: variable=tTrialLaserOnTimeMs, value=trialLaserOnTimeMs
            action assignment: variable=tTrialLaserOffTimeMs, value=trialLaserOffTimeMs
            <!-- !doBlock2 error checking -->
            action assert: stop_on_failure=1, condition=!doLaserStim || (laserDoLinearRamp || laserDoPulseTrain), message=When doLaserStim, ramp or train must be set
          <!-- !doBlock2 -->
          <!-- choose laser power -->
          action if: condition=doLaserStim
            action assignment: variable=tLaserPowerMw, value=tLaserPeakMaxMw / pow(2, 1.0*tStimulusNumber/tLaserPeakStepsPerOctave)
            <!-- adjust from baseline -->
            action if: condition=tLaserBaselinePowerMw > 0
              action assignment: variable=tLaserPowerMw, value=tLaserPowerMw + tLaserBaselinePowerMw
            action report: message=Laser power this trial is $tLaserPowerMw
            action assert: condition=tTrialLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw != 0
          action if: condition=!doLaserStim
            action assignment: variable=tLaserPowerMw, value=0
          <!-- choose vis stim ori/dir -->
          action if: condition=doVisualStim
            action if: condition=doOriDetect
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg + (tGratingMaxDirectionStepDeg / (pow(2, tStimulusNumber/tGratingDirectionStepsPerOctave)))
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast
              action report: message=Grating direction this trial is $tGratingDirectionDeg
            action if: condition=doContrastDetect
              action assignment: variable=tGratingContrast, value=tBaseGratingContrast + (tGratingMaxContrastStep / (pow(2, 1.0*tStimulusNumber/tGratingContrastStepsPerOctave)))
              action assignment: variable=tGratingDirectionDeg, value=tBaseGratingDirectionDeg
              action report: message=Grating contrast this trial is $tGratingContrast
          action if: condition=!doVisualStim
            action assignment: variable=tGratingContrast, value=0
            action assignment: variable=tGratingDirectionDeg, value=0
          action assert: condition=tGratingContrast >= 0, stop_on_failure=1, message=No negative contrasts allowed
          action assert: condition=abs(tBaseGratingDirectionDeg-tGratingDirectionDeg) <= 360, stop_on_failure=1, message=Maximum direction step is 360 degrees
          <!-- send laser params to controller -->
          action if: condition=doLaserStim
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
          <!-- lock down the min stimulus value to a fixed number if variable not negative -->
          <!-- initialize trial start/end times -->
          action if: condition=tThisTrialStartTimeMs == -1
            <!-- first trial, leave lasttime as -1 -->
            action assignment: variable=tLastTrialStartTimeMs, value=-1
          action if: condition=tThisTrialStartTimeMs != -1
            <!-- else -->
            <!-- later trials, copy this into last before setting this again below -->
            action assignment: variable=tLastTrialStartTimeMs, value=tThisTrialStartTimeMs
          action assignment: variable=tThisTrialStartTimeMs, value=now()/1000
          <!-- debug -->
          action report: message=tNStimAccepted == $tNStimAccepted, svStimN is $svStimNumber, tb2TrN is $tBlock2TrialNumber 
          <!-- compute ITI time -->
          <!-- initialize with a const value -->
          action assignment: variable=tItiWaitTimeMs, value=itiTimeMs
          <!-- if asked for, extend ITI based on previous hold and max stim time, also takes TOs and extra cycles into account -->
          action if: condition=doExtendItiOnShortPrevTrial == 1
            action assignment: variable=tempMs, value=(maxCyclesOn*(stimOnTimeMs+stimOffTimeMs))-lastActualHoldTimeMs - extraCycleTimeMs + tTimeoutMs
            action if: condition=tempMs > 0
              <!-- add to ITI -->
              action assignment "-": variable=tItiWaitTimeMs, value=itiTimeMs+tempMs
              action assignment "-": variable=extraCycleTimeMs, value=0
          <!-- extend based on extra cycles and TOs only -->
          action if: condition=doExtendItiOnShortPrevTrial == 0
            action assignment: variable=tempMs, value=-extraCycleTimeMs + tTimeoutMs
            action if: condition=tempMs > 0
              <!-- add to ITI -->
              action assignment "-": variable=tItiWaitTimeMs, value=itiTimeMs+tempMs
              action assignment "-": variable=extraCycleTimeMs, value=0
          action start_timer "Start interTrialTimer": timer=interTrialTimer, duration=tItiWaitTimeMs, duration_units=ms
          action assignment "Clear stimulusOn": variable=stimulusOn, value=0
          action assignment "Encode ItiStart": variable=strobedDigitalWord, value=6
          action if: condition=doLeverSolenoidAllTrials
            <!-- Turn on solenoid for ITI only if doLS is true, not if doLSErrorsOnly -->
            action assignment "lever Solenoid on": variable=FIO2, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action if: condition=!doLeverSolenoidAllTrials
            action assignment: variable=FIO2, value=0
            action assignment "Encode LeverSolenoidOff": variable=strobedDigitalWord, value=13
          action report: message=In ITI, waiting for $tItiWaitTimeMs ms, then waiting for press
          <!-- if trialLaser, send params to controller -->
          action if: condition=tTrialLaserPowerMw > 0
            action assignment "Send laser params to controller": variable=sendLaserParams, value=1
            action assignment "Send laser params to controller": variable=sendLaserParams, value=0
            action assert: condition=tLaserPowerMw == 0, stop_on_failure=1, message=bug: tLaserPowerMw and tTrialLaserPowerMw > 0
            action assert: stop_on_failure=1, condition=(tTrialLaserOnTimeMs == 0 && tTrialLaserOffTimeMs == 0) || (tTrialLaserOnTimeMs > 0 && tTrialLaserOffTimeMs > 0), message=For constant trial laser, set on and off time to 0.  Otherwise on/off time must both be set
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition direct: target=InterTrialIntervalStimulusOn
        task_system_state "InterTrialIntervalStimulusOn"
          <!-- Case if time remaining in ITI is less than stimOnTimeMs -->
          action if: condition=tITIClock < stimOnTimeMs
            action assignment: variable=tITIRemainingOnMs, value=stimOnTimeMs - tITIClock
            action start_timer: timer=stimOnTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOnTimer, duration=tITIClock, duration_units=ms
            action start_timer: timer=transitionOffTimer, duration=9999999, duration_units=ms
          <!-- Case if time remaining in ITI is equal to stimOnTimeMs -->
          action if: condition=tITIClock == stimOnTimeMs
            action start_timer: timer=stimOnTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOnTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOffTimer, duration=stimOnTimeMs, duration_units=ms
          <!-- Do tITIClock subtraction at the end of the task state -->
          action if: condition=tITIClock > stimOnTimeMs
            action assignment: variable=tITIClock, value=tITIClock - stimOnTimeMs
            action start_timer: timer=stimOnTimer, duration=stimOnTimeMs, duration_units=ms
            action start_timer: timer=transitionOnTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOffTimer, duration=9999999, duration_units=ms
          action assignment: variable=tEnteredOnStateTimeMs, value=now()/1000
          action if: condition=!stopITIFlashing
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOn": stimulus=base_grating
            action update_stimulus_display "justincase"
          action report: message=Stimulus On - ITI
          action if: condition=stopITIFlashing == 0
            action play_sound: sound=baseSound
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition timer_expired "Dequeue Visual Stimulus": target=InterTrialIntervalStimulusOff, timer=stimOnTimer
          transition timer_expired "WaitForLeverStimulusOn": target=WaitForLeverStimulusOn, timer=transitionOnTimer
          transition timer_expired "WaitForLeverStimulusOff": target=WaitForLeverStimulusOff, timer=transitionOffTimer
        task_system_state "InterTrialIntervalStimulusOff"
          <!-- Case if time remaining in ITI is less than stimOnTimeMs -->
          action if: condition=tITIClock < stimOffTimeMs
            action assignment: variable=tITIRemainingOffMs, value=stimOffTimeMs - tITIClock
            action start_timer: timer=stimOffTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOnTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOffTimer, duration=tITIClock, duration_units=ms
          <!-- Case if time remaining in ITI is equal to stimOnTimeMs -->
          action if: condition=tITIClock == stimOffTimeMs
            action start_timer: timer=stimOffTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOnTimer, duration=stimOffTimeMs, duration_units=ms
            action start_timer: timer=transitionOffTimer, duration=9999999, duration_units=ms
          <!-- Do tITIClock subtraction at the end of the task state -->
          action if: condition=tITIClock > stimOffTimeMs
            action assignment: variable=tITIClock, value=tITIClock - stimOffTimeMs
            action start_timer: timer=stimOffTimer, duration=stimOffTimeMs, duration_units=ms
            action start_timer: timer=transitionOnTimer, duration=9999999, duration_units=ms
            action start_timer: timer=transitionOffTimer, duration=9999999, duration_units=ms
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          action assignment: variable=tEnteredOffStateTimeMs, value=now()/1000
          action if: condition=!doConstantStimulus
            action dequeue_stimulus "Dequeue ITI Stimulus": stimulus=base_grating
            action update_stimulus_display "justincase"
          action report: message=Stimulus Off - ITI
          transition timer_expired "Queue Visual Stimulus": target=InterTrialIntervalStimulusOn, timer=stimOffTimer
          transition timer_expired "WaitForLeverStimulusOff": target=WaitForLeverStimulusOff, timer=transitionOffTimer
          transition timer_expired "WaitForLeverStimulusOn": target=WaitForLeverStimulusOn, timer=transitionOnTimer
        task_system_state "WaitForLeverStimulusOn"
          action assignment: variable=tEnteredOnStateTimeMs, value=now()/1000
          <!-- Turn on stimulus for timeOn - tITITime -->
          action if: condition=tITIRemainingOnMs > 0
            action start_timer: timer=stimOnTimer, duration=tITIRemainingOnMs, duration_units=ms
            <!-- Ensures that moving directly to Trial doesn't lengthen stimOn time by adding stitching ITION/WaitOn/TrialOn together -->
            action assignment: variable=tEnteredOnStateTimeMs, value=now()/1000 - tITIRemainingOnMs
          action if: condition=tITIRemainingOnMs <= 0
            action start_timer: timer=stimOnTimer, duration=stimOnTimeMs, duration_units=ms
            action if: condition=stopITIFlashing == 0
              action play_sound: sound=baseSound
          action if: condition=!stopITIFlashing
            action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOnOn": stimulus=base_grating
            action update_stimulus_display "justincase"
          action report: message=Stimulus On - WaitingForPress $tITIRemainingOnMs
          <!-- Make sure this assignment is done last -->
          action assignment: variable=tITIRemainingOnMs, value=0
          action assignment: variable=FIO2, value=0
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition timer_expired "Dequeue Visual Stimulus": target=WaitForLeverStimulusOff, timer=stimOnTimer
          transition conditional "Move to Trial with Lever Down": condition= FIO1 == 1, target=TrialStimOn
          transition conditional "Turn stim on right away if stopITIFlashing": condition= FIO1 == 1 && stopITIFlashing==1, target=TrialStimOn
        task_system_state "WaitForLeverStimulusOff"
          action assignment: variable=tEnteredOffStateTimeMs, value=now()/1000
          <!-- Turn on stimulus for timeOn - tITITime -->
          action if: condition=tITIRemainingOffMs > 0
            action start_timer: timer=stimOffTimer, duration=tITIRemainingOffMs, duration_units=ms
          action if: condition=tITIRemainingOffMs <= 0
            action start_timer: timer=stimOffTimer, duration=stimOffTimeMs, duration_units=ms
          action assignment: variable=FIO2, value=0
          action report: message=Stimulus Off - WaitingForPress $tITIRemainingOffMs
          action if: condition=!doConstantStimulus
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOff": stimulus=base_grating
            action update_stimulus_display "justincase"
          <!-- Make sure this assignment is done last -->
          action assignment: variable=tITIRemainingOffMs, value=0
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition timer_expired "Queue Visual Stimulus": target=WaitForLeverStimulusOn, timer=stimOffTimer
          transition conditional "Move to Trial with Lever Down": condition= FIO1 == 1, target=TrialStimOff
          transition conditional "Turn stim on right away if stopITIFlashing": condition= FIO1 == 1 && stopITIFlashing == 1, target=TrialStimOn
        task_system_state "TrialStimOn": interruptble=YES
          action assignment: variable=stimTag, value=1
          action assignment: variable=tStimOnMs, value=now()/1000
          action if: condition=tLeverPressTimeMs < 1
            action assignment "leverResult = 1": variable=leverResult, value=1
            action play_sound: sound=pressSound
            action assignment: variable=tLeverPressTimeMs, value=now()/1000
            action assignment: variable=tTrialRemainingOnMs, value=stimOnTimeMs - (tLeverPressTimeMs - tEnteredOnStateTimeMs)
            action assignment: variable=tTrialCycleOn, value=1
            action assignment: variable=tTrialStartOn, value=1
          <!-- <action type="if" condition="stopITIFlashing==0 &amp;&amp; tCyclesOn &lt; 1">
                        <action type="assignment" variable="tTrialRemainingOnMs" value="stimOnTimeMs - (tLeverPressTimeMs - tEnteredOnStateTimeMs)" />
                      </action> -->
          action assignment: variable=tCyclesOn, value=tCyclesOn + 1
          action if: condition=stopITIFlashing == 1
            action assignment: variable=tTrialRemainingOnMs, value=0
          <!-- Turn on stimulus for tTrialRemainingOn -->
          action if: condition=tTrialCycleOn == 1
            action start_timer: timer=stimOnTimer, duration=tTrialRemainingOnMs, duration_units=ms
          action if: condition=tTrialCycleOn == 0
            action start_timer: timer=stimOnTimer, duration=stimOnTimeMs, duration_units=ms
            action play_sound: sound=baseSound
          action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
          action play_dynamic_stimulus "StimOn": stimulus=base_grating
          action update_stimulus_display "justincase"
          action report: message=Lever Down - Trial Started - Stim On $tCyclesOn of $nCyclesOn
          action assignment: variable=tTrialCycleOn, value=0
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition timer_expired "Dequeue Visual Stimulus": target=TrialStimOff, timer=stimOnTimer
        task_system_state "TrialStimOff": interruptble=YES
          action assignment: variable=stimTag, value=0
          action assignment: variable=tStimOffMs, value=(now()/1000)
          action if: condition=tLeverPressTimeMs < 1
            action assignment "leverResult = 1": variable=leverResult, value=1
            action play_sound: sound=pressSound
            action assignment: variable=tLeverPressTimeMs, value=now()/1000
            action assignment: variable=tTrialRemainingOffMs, value=stimOffTimeMs - (tLeverPressTimeMs - tEnteredOffStateTimeMs)
            action assignment: variable=tTrialCycleOff, value=1
            action assignment: variable=tTrialStartOff, value=1
          <!-- Turn off stimulus for tTrialRemainingOff -->
          action if: condition=tTrialCycleOff == 1
            action start_timer: timer=stimOffTimer, duration=tTrialRemainingOffMs, duration_units=ms
            action start_timer: timer=targetTimer, duration=9999999, duration_units=ms
          action if: condition=(tTrialCycleOff==0) && (tCyclesOn < nCyclesOn)
            action start_timer: timer=stimOffTimer, duration=stimOffTimeMs, duration_units=ms
            action start_timer: timer=targetTimer, duration=9999999, duration_units=ms
          action if: condition=(tTrialCycleOff==0) && (tCyclesOn >= nCyclesOn)
            action start_timer: timer=targetTimer, duration=stimOffTimeMs, duration_units=ms
            action start_timer: timer=stimOffTimer, duration=9999999, duration_units=ms
          action if: condition=!doConstantStimulus
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "justincase"
          action report: message=Lever Down - Trial Started - Stim Off
          action assignment: variable=tTrialCycleOff, value=0
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition timer_expired "Queue Visual Stimulus": target=TrialStimOn, timer=stimOffTimer
          transition timer_expired "Move on to Target Stimulus Presentation": target=TargetStimOn, timer=targetTimer
        task_system_state "TargetStimOn": interruptble=YES
          action assignment: variable=stimTag, value=2
          action assignment "set Stim on time": variable=tStimOnMs, value=now()/1000
          action assignment "set Target Stim on time": variable=targetStimOnMs, value=now()/1000
          action start_timer: timer=tooFastTimer, duration=tooFastTimeMs, duration_units=ms
          action start_timer: timer=reactTimeTimer, duration=reactTimeMs, duration_units=ms
          action start_timer: timer=targetOnTimer, duration=stimOnTimeMs, duration_units=ms
          <!-- Must dequeue stimulus in the doConstantStimulus case -->
          action if: condition=doConstantStimulus==1
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action play_dynamic_stimulus "StimOff": stimulus=base_grating
            action update_stimulus_display "justincase"
          action live_queue_stimulus "Queue Stimulus": stimulus=target_grating
          action play_dynamic_stimulus "StimOn": stimulus=target_grating
          action play_sound: sound=targetSound
          action update_stimulus_display "justincase"
          action report: message=Target Stim On for $stimOnTimeMs ms
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "If Lever Up, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1, target=EarlyRelease
          transition timer_expired "if tooFastTimer expired, go to React": target=React, timer=tooFastTimer
          transition timer_expired "Dequeue Visual Stimulus": target=EndTrialStimOff, timer=targetOnTimer
        task_system_state "React"
          action assignment "set react time": variable=startReactState, value=now()/1000
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          action assignment "turn off too fast": variable=isTooFast, value=0
          action start_timer: timer=tooFastTimer, duration=9999999, duration_units=ms
          transition conditional "If Lever Up, Go To Reward": condition=FIO1 == 0 && doLever == 1, target=Reward
          transition timer_expired "If React Time Expired, Go To Missed": target=Missed, timer=reactTimeTimer
          transition timer_expired "Dequeue Target Stimulus": target=EndTrialStimOff, timer=targetOnTimer
          transition timer_expired "Dequeue Base Stimulus": target=EndTrialStimOff, timer=endOnTimer
          transition timer_expired "Queue Base Stimulus": target=EndTrialStimOn, timer=endOffTimer
        task_system_state "EarlyRelease"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverReleaseEarly": variable=strobedDigitalWord, value=8
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "ReportEarlyRelease": full_name=ReportDigital, message=** Early Release (FIO1 = $FIO1 )
          <!-- update running variables -->
          action assignment "failure++": variable=failure, value=failure+1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action play_sound "Play incorrectSound": sound=incorrectSound
          <!-- reject stim selection -->
          action reject_selections: selection=svStimNumber
          action if "if doLeverSolenoid/Early": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnEarly
            action assignment "lever Solenoid on": variable=FIO2, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          <!-- assign early TO for next trial -->
          action assignment: variable=tTimeoutMs, value=earlyTimeoutMs
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "Stay in StimOn": condition=stimTag > 0, target=EndTrialFinishStimOn
          transition conditional "Stay in StimOff": condition=stimTag < 1, target=EndTrialFinishStimOff
        task_system_state "Missed"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverNoReleaseMiss": variable=strobedDigitalWord, value=11
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action assignment "ignore++": variable=ignore, value=ignore + 1
          action assignment "consecCorrects = 0": variable=consecCorrects, value=0
          action assignment: variable=tConsecErrors, value=tConsecErrors+1
          action report "Report 4": full_name=ReportDigital, message=** Ignored react stimulus
          action play_sound "Play incorrectSound 2": sound=incorrectSound
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          <!-- assign missed TO for next trial -->
          action assignment: variable=tTimeoutMs, value=missedTimeoutMs
          action if "if doLeverSolenoid/ErrorsOnly": condition=doLeverSolenoidAllTrials || doLeverSolenoidOnMiss
            action assignment "lever Solenoid on": variable=FIO2, value=1
            action assignment "Encode LeverSolenoidOn": variable=strobedDigitalWord, value=12
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "Stay in StimOn": condition=stimTag > 0, target=EndTrialFinishStimOn
          transition conditional "Stay in StimOff": condition=stimTag < 1, target=EndTrialFinishStimOff
        task_system_state "Reward"
          action assignment "leverResult = 0": variable=leverResult, value=0
          action assignment "Set release time": variable=tLeverReleaseTimeMs, value=(now()/1000)
          action assignment "Encode LeverReleaseCorrect": variable=strobedDigitalWord, value=9
          <!-- accept stim selection -->
          action accept_selections: selection=svStimNumber
          action assignment: variable=tNStimAccepted, value=tNStimAccepted + 1
          <!-- update selection variable -->
          action if: condition=tNStimAccepted >= 80
            action reset_selection: selection=svStimNumber
            action assignment: variable=tNStimAccepted, value=0
          action if: condition=tNStimAccepted < 80
            action next_selection: selection=svStimNumber
          action assignment: variable=actualHoldTimeMs, value= (now()/1000) - tLeverPressTimeMs
          action report "Report": message=actualHoldTimeMs = $actualHoldTimeMs
          action report "Report Reward": full_name=ReportDigital, message=** Success
          <!-- update running variables -->
          action assignment "success++": variable=success, value=success+1
          action assignment: variable=tConsecErrors, value=0
          action assignment "Assign reward": variable=tTotalRewardTimeUs, value=rewardUs
          action assignment "summing corrects": variable=tempNCorrect, value=tempNCorrect+1
          <!-- assign reward size based on elapsed rand if rampdown == 0 -->
          action if: condition=doBlock2 == 1
            action if: condition=doBlock2SeparateReward == 0
              action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=rewardUs
            action if: condition=doBlock2SeparateReward == 1
              action if: condition=tBlock2TrialNumber == 0
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=rewardUs
              action if: condition=tBlock2TrialNumber == 1
                action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=block2RewardUs
          <!-- give reward on every N corrects -->
          action if: condition=tempNCorrect < rewardEveryNCorrect
            action assignment "Assign tTotalRewardTimeUs": variable=tTotalRewardTimeUs, value=0
          action if: condition=tempNCorrect == rewardEveryNCorrect
            action assignment "rezero tempNCorrect": variable=tempNCorrect, value=0
          <!-- scale based on consec corrects -->
          action if "if consecCorrects < max": condition=consecCorrects < maxConsecCorrects
            action assignment "consecCorrects++": variable=consecCorrects, value=consecCorrects+1
          action assignment "set tNRewards": variable=tNRewards, value=consecCorrects
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition direct "Always Go to GiveReward": target=GiveReward
        task_system_state "GiveReward"
          <!-- no TO for next trial -->
          action assignment: variable=tTimeoutMs, value=0
          action assignment "tNRewards--": variable=tNRewards, value=tNRewards-1
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "if rewards remain, go to SingleReward (note must be -1)": condition=tNRewards > -1, target=SingleReward
          transition direct "Always Go to PRP": target=PostRewardPause
        task_system_state "PostRewardPause"
          action start_timer "StartTimer": timer=postRewardTimer, duration=postRewardMs, duration_units=ms
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "Stay in StimOn": condition=stimTag > 0, target=EndTrialFinishStimOn
          transition conditional "Stay in StimOff": condition=stimTag < 1, target=EndTrialFinishStimOff
        task_system_state "SingleReward"
          action assignment "interRewardInterval minimum to juiceTime": variable=tInterRewardIntervalMs, value=interRewardIntervalMs + ( tTotalRewardTimeUs / 1000 )
          action start_timer "Start interRewardIntervalTimer": timer=interRewardIntervalTimer, duration=tInterRewardIntervalMs, duration_units=ms
          action assignment "Encode Reward": variable=strobedDigitalWord, value=10
          action assignment: variable=juice, value=tTotalRewardTimeUs
          action play_sound "Play reward sound": sound=rewardSound
          action if: condition=tempNCorrect == 0
            action report "Report": message=juice = $juice
          action if: condition=tempNCorrect > 0
            action if: condition=tempNCorrect < rewardEveryNCorrect
              action report "Report": message=juice = $juice, $tempNCorrect correct: need $rewardEveryNCorrect
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition timer_expired "If interRewardIntervalTimer expired, go to GiveReward": target=GiveReward, timer=interRewardIntervalTimer
        task_system_state "EndTrialStimOn": interruptble=YES
          action start_timer: timer=endOnTimer, duration=stimOnTimeMs, duration_units=ms
          action play_sound: sound=baseSound
          action live_queue_stimulus "Queue Stimulus": stimulus=base_grating
          action play_dynamic_stimulus "StimOn": stimulus=base_grating
          action update_stimulus_display "justincase"
          action report: message=End of Trial - Stim On
          action assignment: variable=stimTag, value=1
          action assignment "nTaskStates+1": variable=nTaskStates, value=nTaskStates + 1
          transition conditional "If Lever Up and too fast, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up and not too fast, Go To Reward": condition=FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition timer_expired "Dequeue Visual Stimulus": target=EndTrialStimOff, timer=endOnTimer
          transition timer_expired "if tooFastTimer expired, go to React": target=React, timer=tooFastTimer
          transition timer_expired "If React Time Expired, Go To Missed": target=Missed, timer=reactTimeTimer
        task_system_state "EndTrialStimOff": interruptble=YES
          action start_timer: timer=endOffTimer, duration=stimOffTimeMs, duration_units=ms
          action if: condition=stimTag==2
            action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating
            action update_stimulus_display "justincase"
          action if: condition=stimTag==1
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "justincase"
          action report: message=End of Trial - Stim Off
          transition conditional "If Lever Up, and too fast, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 1, target=EarlyRelease
          transition conditional "If Lever Up, and not too fast, Go To EarlyRelease": condition=FIO1 == 0 && doLever == 1 && isTooFast == 0, target=Reward
          transition timer_expired "Back to base stimulus presentation": target=EndTrialStimOn, timer=endOffTimer
          transition timer_expired "if tooFastTimer expired, go to React": target=React, timer=tooFastTimer
          transition timer_expired "If React Time Expired, Go To Missed": target=Missed, timer=reactTimeTimer
        task_system_state "EndTrialFinishStimOn": interruptble=YES
          action assignment: variable=timeEndRemainingOnMs, value=stimOnTimeMs - ((now()/1000)-tStimOnMs)
          action assignment: variable=extraCycleTimeMs, value=timeEndRemainingOnMs
          action start_timer: timer=stimOnTimer, duration=timeEndRemainingOnMs, duration_units=ms
          action report: message=End of Trial - Final Stim On
          transition timer_expired "Dequeue Visual Stimulus": target=EndTrialFinishStimOff, timer=stimOnTimer
        task_system_state "EndTrialFinishStimOff": interruptble=YES
          action if: condition=stimTag==2
            action start_timer: timer=endTimer, duration=stimOffTimeMs, duration_units=ms
            action dequeue_stimulus "Dequeue Stimulus": stimulus=target_grating
            action update_stimulus_display "justincase"
            action assignment: variable=extraCycleTimeMs, value=stimOffTimeMs+extraCycleTimeMs
          action if: condition=stimTag==1
            action start_timer: timer=endTimer, duration=stimOffTimeMs, duration_units=ms
            action dequeue_stimulus "Dequeue Stimulus": stimulus=base_grating
            action update_stimulus_display "justincase"
            action assignment: variable=extraCycleTimeMs, value=stimOffTimeMs+extraCycleTimeMs
          action if: condition=stimTag==0
            action assignment: variable=timeEndRemainingOffMs, value=stimOffTimeMs - ((now()/1000)-tStimOffMs)
            action start_timer: timer=endTimer, duration=timeEndRemainingOffMs, duration_units=ms
            action assignment: variable=extraCycleTimeMs, value=timeEndRemainingOffMs+extraCycleTimeMs
          action report: message=End of Trial - Final Stim Off
          transition timer_expired "EndTrial": target=EndTrial, timer=endTimer
        task_system_state "EndTrial": interruptble=YES
          action stop_device_IO "Stop IO Device": device=LabJackU6
          action report: message=Trial Ended
          action assignment: variable=trials, value=trials+1
          action assignment "End Matlab Sync": variable=sync, value=0
          transition yield "return to parent task system"
    action dequeue_stimulus: stimulus=base_grating
    action update_stimulus_display "Update Stimulus"
