<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="labjacku6" tag="labjacku6" pulse_duration="juice" pulse_on="juice" lever1="lever1" lever1_solenoid="lever1_solenoid" laser_trigger="laser_trigger" quadrature="quadrature" counter="counter1" counter2="counter2" optic_device="optic_device" do2led="do2led" led_seq="led_seq" led1_status="led1_status" led2_status="led2_status"></iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="juice" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="juice_input" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="nstep" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="do2led" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        <variable tag="led1_status" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        <variable tag="led2_status" scope="global" logging="when_changed" default_value="0" type="boolean"></variable>
        <variable tag="led_seq" scope="global" logging="when_changed" default_value="1,1,1,2" type="list"></variable>
        <variable tag="led_seq_i" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_SOURCE" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_solenoid" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="lever1_solenoid_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="laser_trigger" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="laser_trigger_SINK" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="counter1" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
        <variable tag="counter2" scope="global" logging="when_changed" default_value="0" type="integer" persistant="1"></variable>
        <variable tag="quadrature" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="optic_device" scope="global" logging="when_changed" default_value="led" type="string"></variable>
        <variable tag="tempCount1" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="tempCount2" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="nScans1" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
        <variable tag="nScans2" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
        <variable tag="nScans3" scope="global" logging="when_changed" default_value="200" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli"></stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            
            <trial tag="Trial 01" nsamples="120" sampling_method="cycles" selection="sequential">
                <action tag="Start labjack" type="start_device_IO" device="labjacku6"></action>
                <task_system tag="TS" full_name="TS" description="" interruptible="YES">
                <task_system_state tag="Intertrial" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    
                    <action type="assignment" variable="juice" value="juice_input"></action>
                    <action type="report" message="trial is "></action>
                    <action tag="Stop IO Device" type="stop_device_IO" device="labjacku6"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="yield" tag="return to parent task system"></transition>
                </task_system_state>
            </task_system>
        </trial>
        </protocol>
    </experiment>
</monkeyml>